PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=5FD012A4
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Pirates
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Routines
  Routine exploit
    CodeComponent code_exploit
      Code Type = JS
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      Begin JS Routine:
        // set remaining actions to display to participant
        actions_remaining=total_actions_allowed-actions_blk;

        if ((actions_remaining<0)) {
            actions_remaining=0;
            }

        actions_remaining_msg='Actions left in block: ' + actions_remaining.toString();

        // if just entered patch, start timer
        if ((exploit_actions===0)) {
            patchTime=0;
            startTime = Date.now();
        }
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // force the first action to be a treasure dig
        if ((exploit_actions===0)) {
        valid_keypress=keys_first_exploit_allowed.includes(exploit_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }
        }

        // after one dig, allow digging or sailing responses
        if ((exploit_actions>0)) {
        valid_keypress=keys_exploit_allowed.includes(exploit_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }
        }

        // if the total actions allowed in the block have been taken, end the block
        if ((actions_remaining===0)) {
            continueRoutine=false;
            exploit_loop.finished=true;
            trials.finished=true;
            fbk_opacity=0; // don't display fbk if blocks ends with island selection
        }
      End JS Routine:
        // update exploit actions
        if ((exploit_resp.keys === "space")) {
        decision_type=2;
        }

        if ((exploit_resp.keys === "s")) {
            decision_type=3;
            }

        if ((actions_remaining>0)) { //get mean reward at point of decision
        mean_reward_blk=points_blk/actions_blk;
        mean_reward_entire_experiment=total_points/total_actions;
        }

        // compute the reward value of the current patch
        if ((exploit_actions===0)) { // if first action, use actual patch values
            rew_displayed = Math.floor(isld_rvals[(curr_isld - 1)]);
            rew_displayed_msg='+' + rew_displayed.toString();

            if (( Math.floor(isld_rvals[(curr_isld - 1)])===isld_svals[(curr_isld - 1)] )) {
                treasure_pos=[];
                treasure_pos=[treasure_pos_orig[0]+0.0075,treasure_pos_orig[1]];
                }
        }

        if ((exploit_actions>0)) { // if beyond first action, enact decay
            base = 1-k; // k is the decay parameter
            power = (exploit_actions);
            isld_rvals[(curr_isld - 1)] = isld_rvals[(curr_isld - 1)] * Math.pow(base, power);
            rew_displayed = Math.floor(isld_rvals[(curr_isld - 1)]);
            rew_displayed_msg='+' + rew_displayed.toString();
            }

        // display coin at normal position if two digit reward
        if (( Math.floor(isld_rvals[(curr_isld - 1)])<isld_svals[(curr_isld - 1)] )) {
                treasure_pos=[];
                treasure_pos=[treasure_pos_orig[0],treasure_pos_orig[1]];
            }


        // save data
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', Math.floor(mean_reward_blk));
        psychoJS.experiment.addData('current patch position', curr_isld); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', Math.floor(isld_rvals[0]));
        psychoJS.experiment.addData('patch value top', Math.floor(isld_rvals[1]));
        psychoJS.experiment.addData('patch value right', Math.floor(isld_rvals[2]));
        psychoJS.experiment.addData('patch replenish left', isld_replen_rates[0]);
        psychoJS.experiment.addData('patch replenish top', isld_replen_rates[1]);
        psychoJS.experiment.addData('patch replenish right', isld_replen_rates[2]);
        psychoJS.experiment.addData('current patch replenish rate', isld_replen_rates[curr_isld-1]); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', Math.floor(isld_rvals[slow_idx]));
        psychoJS.experiment.addData('patch value medium', Math.floor(isld_rvals[medium_idx]));
        psychoJS.experiment.addData('patch value fast', Math.floor(isld_rvals[fast_idx]));
        psychoJS.experiment.addData('patch replenish slow', isld_replen_rates[slow_idx]);
        psychoJS.experiment.addData('patch replenish medium', isld_replen_rates[medium_idx]);
        psychoJS.experiment.addData('patch replenish fast', isld_replen_rates[fast_idx]);
        psychoJS.experiment.addData('decision type', decision_type); // Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 3); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback

        // selection variables
        psychoJS.experiment.addData('patch_selection_key', 0);
        psychoJS.experiment.addData('patch_selection_RT', 0);

        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', Math.floor(isld_rvals[(curr_isld - 1)]));
        psychoJS.experiment.addData('rew_fbk_displayed', rew_displayed);
        psychoJS.experiment.addData('blk_points', Math.floor(points_blk));
        psychoJS.experiment.addData('blk_actions', actions_blk);
        psychoJS.experiment.addData('exploit_phase_key', exploit_resp.keys);
        psychoJS.experiment.addData('exploit_phase_RT', exploit_resp.rt);

        if ((exploit_resp.keys === "space")) {
        psychoJS.experiment.addData('num_exploit_actions', 0);
        }

        if ((exploit_resp.keys === "s")) {
        psychoJS.experiment.addData('num_exploit_actions', exploit_actions); // just save on leaving to make analysis easier
        }

        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', Math.floor(mean_reward_entire_experiment));
        psychoJS.experiment.addData('total_points', Math.floor(total_points));
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', actions_remaining);
        psychoJS.experiment.addData('time in patch (seconds)', patchTime);
        psychoJS.experiment.nextEntry()

        // update action counters
        actions_blk=(actions_blk + 1);
        total_actions=(total_actions + 1);

        // update exploit actions
        if ((exploit_resp.keys === "space")) {
        exploit_actions = (exploit_actions + 1);
        }

        // update points
        if ((exploit_resp.keys === "space")) {
        if ((actions_remaining>0)) {
        points_blk=points_blk+isld_rvals[(curr_isld - 1)];
        total_points=total_points+isld_rvals[(curr_isld - 1)];
        }
        }

        if ((actions_remaining>0)) { //get mean reward at point of decision
        mean_reward_blk=points_blk/actions_blk;
        mean_reward_entire_experiment=total_points/total_actions;
        }

        // return to selection screen
        if ((exploit_resp.keys === "s")) {
            continueRoutine=false;
            exploit_loop.finished=true;
            trials.finished=true;
            }
    PolygonComponent ocean_exploit
      fillColor = $ocean_col
      lineColor = $ocean_col
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld1_exploit
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld1_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld2_exploit
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld2_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld3_exploit
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld3_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    ImageComponent agent_exploit
      image = $agent
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
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    TextComponent points_txt
      letterHeight = 0.025
      opacity = 0
      pos [set every repeat] = $rew_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $rew_displayed
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    TextComponent dig_sail_txt
      letterHeight = 0.025
      pos [set every repeat] = [0,0]
      startVal [time (s)] = 0.0
      text = Press space to dig for treasure and s to set sail
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    TextComponent exploit_action_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $actions_remaining_msg
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    KeyboardComponent exploit_resp
      allowedKeys = 'space','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine select
    CodeComponent code_select
      Code Type = JS
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      Begin JS Experiment:
        // set decay constant
        k=0.05;

        // set island replenish rates
        //isld_replen_rates = [5/50, 10/50, 15/50];
        isld_replen_rates = [2.5/50, 5/50, 7.5/50];
        initial_replen_rates = [...isld_replen_rates]; //backup copy

        // set object start values and a value vector that can be updated during the block
        isld_svals = [100, 100, 100];
        //isld_rvals = [100, 100, 100];

        // set total actions allowed in block
        total_actions_allowed=200;

        // initialise action counter for block and full experiment
        actions_blk=0;
        total_actions=0;
        patchTime=0;

        // set durations
        travel_duration = 1;
        fbk_duration=1.5;

        // set curr_isld to non-island value for first trial
        curr_isld=10;

        // set alt_islds for first trial
        alt_islds=[1,2,3];

        // set keys allowed
        keys_allowed = ['f', 'j', 'k'];

        // set image paths
        agent = "stimuli/pirate_ship.png";
        bounty = "stimuli/coin.png";

        // set travel message
        travel_msg='Sailing in progress...'

        // set object sizes
        ocean_size = [0.9, 0.9];
        isld_size = [0.25, 0.25];
        agent_size = [0.1, 0.1];
        treasure_size = [0.025, 0.025];
        box_size = [0.025, 0.025]; // forced choice box
        center_txt_pos=[0, -0.075];
        cross_size = 0.035;
        action_msg_size = 0.02;

        // set object positions
        ocean_pos = [0, 0];
        isld1_pos = [(- 0.3), (- 0.25)];
        isld2_pos = [0, 0.25];
        isld3_pos = [0.3, (- 0.25)];
        curr_pos = [0, 0];
        ship_pos = [0, 0];
        goal_pos = [0, 0];
        treasure_pos = [0, 0];
        box_pos = [0, 0];
        f_keypos = [(- 0.3), (- 0.35)];
        j_keypos = [0, 0.15];
        k_keypos = [0.3, (- 0.35)];
        action_msg_pos = [0.325, 0.425];

        // set object colours
        ocean_col = [(12 / 255), (164 / 255), (255 / 255)];
        isld_col = [0, (137 / 255), (82 / 255)];
        box_line_col = [0, (255 / 255), 0];

        // set opacity values
        box_opacity = 0;
        f_key_opacity=1;
        j_key_opacity=1;
        k_key_opacity=1;
        cross_opacity=1;
        fbk_opacity=1;

        // initialise reward feedback to display and other reward variables
        rew_displayed = 0;
        total_points=0;
        points_blk=0;
        mean_reward_block=0;
        mean_reward_entire_experiment=0;

        // set select key txt
        f_key_txt='F';
        j_key_txt='J';
        k_key_txt='K';

        // set keys allowed for first action in an island
        keys_first_exploit_allowed=['space']; // ensure first action must be a dig

        // set keys allowed for remaining actions in an island
        keys_exploit_allowed=['space','s']; // allows actions after the first to be a dig or to set sail
      Begin JS Routine:
        // if block type is forced, randomly select one patch the participant can travel to
        if ((curr_blk === 1)) {
            //forced_isld_num = Math.ceil(Math.random() * 3)
            shuffle(alt_islds)
            forced_isld_num = alt_islds[0];
            keys_allowed = [];
            cross_opacity=1;
            if ((forced_isld_num === 1)) {
                keys_allowed = "f";
                box_pos = [(- 0.3), (- 0.35)];
                cross1_pos =[0, 0.15];
                cross2_pos = [0.3, (- 0.35)];
            }
            if ((forced_isld_num === 2)) {
                keys_allowed = "j";
                box_pos = [0, 0.15];
                cross1_pos = [(- 0.3), (- 0.35)];
                cross2_pos = [0.3, (- 0.35)];
            }
            if ((forced_isld_num === 3)) {
                keys_allowed = "k";
                box_pos = [0.3, (- 0.35)];
                cross1_pos = [(- 0.3), (- 0.35)];
                cross2_pos = [0, 0.15];
            }
        }

        // if block type is free allow both alternative keys to be pressed
        if ((curr_blk === 2)) {
            box_pos = [0, 0];
            box_col = ocean_col;
            keys_allowed = ['f', 'j', 'k'];
            cross1_pos=[0,0];
            cross2_pos=[0,0];
            cross_opacity=0;

            // set alt islands
            if ((curr_isld !==10)) {

                if ((curr_isld === 1)) {
                    keys_allowed=['j','k'];
                }

                if ((curr_isld === 2)) {
                    keys_allowed=['f','k'];
                }

                if ((curr_isld === 3)) {
                    keys_allowed=['f','j'];
                    }
                }
        }

        // set remaining actions to display to participant
        actions_remaining=total_actions_allowed-actions_blk;
        actions_remaining_msg='Actions left in block: ' + actions_remaining.toString();
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if a valid key is pressed, end this part of the trial
        valid_keypress=keys_allowed.includes(sel_resp.keys);
        if ((valid_keypress===true)) {
            continueRoutine=false;
            }

        // if the total actions allowed in the block have been taken, end the block
        if ((actions_remaining===0)) {
            curr_pos = [0, 0];
            ship_pos = [0, 0];
            curr_isld = 10;
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // set reward position based on island selected
        rew_pos = [];
        if ((sel_resp.keys === "f")) {
            rew_pos = [(- 0.3), (- 0.25)];
            treasure_pos=[(- 0.265), (- 0.25)];
            curr_isld = 1; // index into isld_rvals
        }
        if ((sel_resp.keys === "j")) {
            rew_pos = [0, 0.25];
            treasure_pos=[0.035, 0.25];
            curr_isld = 2;
        }
        if ((sel_resp.keys === "k")) {
            rew_pos = [0.3, (- 0.25)];
            treasure_pos = [0.335, (- 0.25)];
            curr_isld = 3;
        }

        // store a backup copy
        treasure_pos_orig=[];
        treasure_pos_orig=[...treasure_pos];

        // set local action counter for upcoming island
        exploit_actions = 0;

        // update action counters
        actions_blk=(actions_blk + 1);
        total_actions=(total_actions + 1);
        actions_remaining=total_actions_allowed-actions_blk;

        // save data
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', Math.floor(mean_reward_blk));
        psychoJS.experiment.addData('current patch position', curr_isld); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', Math.floor(isld_rvals[0]));
        psychoJS.experiment.addData('patch value top', Math.floor(isld_rvals[1]));
        psychoJS.experiment.addData('patch value right', Math.floor(isld_rvals[2]));
        psychoJS.experiment.addData('patch replenish left', isld_replen_rates[0]);
        psychoJS.experiment.addData('patch replenish top', isld_replen_rates[1]);
        psychoJS.experiment.addData('patch replenish right', isld_replen_rates[2]);
        psychoJS.experiment.addData('current patch replenish rate', isld_replen_rates[curr_isld-1]); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', Math.floor(isld_rvals[slow_idx]));
        psychoJS.experiment.addData('patch value medium', Math.floor(isld_rvals[medium_idx]));
        psychoJS.experiment.addData('patch value fast', Math.floor(isld_rvals[fast_idx]));
        psychoJS.experiment.addData('patch replenish slow', isld_replen_rates[slow_idx]);
        psychoJS.experiment.addData('patch replenish medium', isld_replen_rates[medium_idx]);
        psychoJS.experiment.addData('patch replenish fast', isld_replen_rates[fast_idx]);
        psychoJS.experiment.addData('decision type', 1); // Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 1); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback

        // selection variables
        psychoJS.experiment.addData('patch_selection_key', sel_resp.keys);
        psychoJS.experiment.addData('patch_selection_RT', sel_resp.rt);

        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', 0);
        psychoJS.experiment.addData('rew_fbk_displayed', 0);
        psychoJS.experiment.addData('blk_points', Math.floor(points_blk));
        psychoJS.experiment.addData('blk_actions', actions_blk);
        psychoJS.experiment.addData('exploit_phase_key', 'N/A');
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('num_exploit_actions', 0);


        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', Math.floor(mean_reward_entire_experiment));
        psychoJS.experiment.addData('total_points', Math.floor(total_points));
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', actions_remaining);
        psychoJS.experiment.addData('time in patch (seconds)', 0);
        psychoJS.experiment.nextEntry()

        // update patch values following selection
            isld_rvals[0] = (isld_rvals[0] + isld_replen_rates[0]*(100-isld_rvals[0]));
            isld_rvals[1] = (isld_rvals[1] + isld_replen_rates[1]*(100-isld_rvals[1]));
            isld_rvals[2] = (isld_rvals[2] + isld_replen_rates[2]*(100-isld_rvals[2]));

            // if the values exceed the maximum value, set them to the maximum
            if ((isld_rvals[0] > isld_svals[0])) {
                isld_rvals[0] = isld_svals[0];
            }
            if ((isld_rvals[1] > isld_svals[1])) {
                isld_rvals[1] = isld_svals[1];
            }
            if ((isld_rvals[2] > isld_svals[2])) {
                isld_rvals[2] = isld_svals[2];
            }
    PolygonComponent ocean_select
      fillColor = $ocean_col
      lineColor = $ocean_col
      pos [set every repeat] = $ocean_pos
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld1_select
      fillColor [set every repeat] = $isld_col
      lineColor [set every repeat] = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld1_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld2_select
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld2_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    PolygonComponent isld3_select
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld3_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
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    TextComponent Select_txt
      letterHeight = 0.025
      pos [set every repeat] = center_txt_pos
      startVal [time (s)] = 0.0
      text = Select an island!
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    PolygonComponent forced_choice_box
      fillColor = $isld_col
      lineColor = $box_line_col
      lineWidth = 5
      opacity [set every repeat] = $box_opacity
      pos [set every repeat] = $box_pos
      shape = rectangle
      size [set every repeat] = $box_size
      startVal [time (s)] = 0.0
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    TextComponent Select_F
      letterHeight = 0.025
      opacity [set every repeat] = $f_key_opacity
      pos [set every repeat] = $f_keypos
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f_key_txt
    TextComponent Select_J
      letterHeight = 0.025
      opacity [set every repeat] = $j_key_opacity
      pos [set every repeat] = $j_keypos
      startVal [time (s)] = 0.0
      text [set every repeat] = $j_key_txt
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    TextComponent Select_K
      letterHeight = 0.025
      opacity [set every repeat] = $k_key_opacity
      pos [set every repeat] = $k_keypos
      startVal [time (s)] = 0.0
      text [set every repeat] = $k_key_txt
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    TextComponent Select_Cross1
      color = red
      letterHeight [set every repeat] = $cross_size
      opacity [set every repeat] = $cross_opacity
      pos [set every repeat] = $cross1_pos
      startVal [time (s)] = 0.0
      text = X
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    TextComponent Select_Cross2
      color = red
      letterHeight [set every repeat] = $cross_size
      opacity [set every repeat] = $cross_opacity
      pos [set every repeat] = $cross2_pos
      startVal [time (s)] = 0.0
      text = X
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    ImageComponent agent_img
      image = stimuli/pirate_ship.png
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
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    TextComponent Select_act_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $actions_remaining_msg
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    KeyboardComponent sel_resp
      allowedKeys = ['f','j','k']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine travel
    CodeComponent code_select_2
      Code Type = JS
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      Begin JS Routine:
        // set the goal position depending on button press
        if ((sel_resp.keys === "f")) {
            goal_pos=[0,0];
            goal_pos[0]=isld1_pos[0]+0.1;
            goal_pos[1]=isld1_pos[1]+0.1;
            direction = "left";
        }
        if ((sel_resp.keys === "j")) {
            goal_pos=[0,0];
            goal_pos[0]=isld2_pos[0];
            goal_pos[1]=isld2_pos[1]-0.1;
            direction = "up";
        }
        if ((sel_resp.keys === "k")) {
            goal_pos=[0,0];
            goal_pos[0]=isld3_pos[0]-0.1;
            goal_pos[1]=isld3_pos[1]+0.1;
            direction = "right";
        }

        // set current pos to ship pos
        curr_pos = ship_pos;

        // set remaining actions to display to participant
        actions_remaining=total_actions_allowed-actions_blk;

        if ((actions_remaining<0)) {
            actions_remaining=0;
            }

        actions_remaining_msg='Actions left in block: ' + actions_remaining.toString();
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if the total actions allowed in the block have been taken, end the block
        if ((actions_remaining===0)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // update the position of the agent
        ship_pos[0]=goal_pos[0];
        ship_pos[1]=goal_pos[1];

        // save data
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', Math.floor(mean_reward_blk));
        psychoJS.experiment.addData('current patch position', curr_isld); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', Math.floor(isld_rvals[0]));
        psychoJS.experiment.addData('patch value top', Math.floor(isld_rvals[1]));
        psychoJS.experiment.addData('patch value right', Math.floor(isld_rvals[2]));
        psychoJS.experiment.addData('patch replenish left', isld_replen_rates[0]);
        psychoJS.experiment.addData('patch replenish top', isld_replen_rates[1]);
        psychoJS.experiment.addData('patch replenish right', isld_replen_rates[2]);
        psychoJS.experiment.addData('current patch replenish rate', isld_replen_rates[curr_isld-1]); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', Math.floor(isld_rvals[slow_idx]));
        psychoJS.experiment.addData('patch value medium', Math.floor(isld_rvals[medium_idx]));
        psychoJS.experiment.addData('patch value fast', Math.floor(isld_rvals[fast_idx]));
        psychoJS.experiment.addData('patch replenish slow', isld_replen_rates[slow_idx]);
        psychoJS.experiment.addData('patch replenish medium', isld_replen_rates[medium_idx]);
        psychoJS.experiment.addData('patch replenish fast', isld_replen_rates[fast_idx]);
        psychoJS.experiment.addData('decision type', 0); // Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 2); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback

        // selection variables
        psychoJS.experiment.addData('patch_selection_key', 0);
        psychoJS.experiment.addData('patch_selection_RT', 0);

        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', 0);
        psychoJS.experiment.addData('rew_fbk_displayed', 0);
        psychoJS.experiment.addData('blk_points', Math.floor(points_blk));
        psychoJS.experiment.addData('blk_actions', actions_blk);
        psychoJS.experiment.addData('exploit_phase_key', 'N/A');
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('num_exploit_actions', 0);

        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', Math.floor(mean_reward_entire_experiment));
        psychoJS.experiment.addData('total_points', Math.floor(total_points));
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', actions_remaining);
        psychoJS.experiment.addData('time in patch (seconds)', 0);
        psychoJS.experiment.nextEntry()
    PolygonComponent ocean_select_2
      fillColor = $ocean_col
      lineColor = $ocean_col
      pos [set every repeat] = $ocean_pos
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    PolygonComponent isld1_select_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld1_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    PolygonComponent isld2_select_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld2_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    PolygonComponent isld3_select_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 30
      pos [set every repeat] = $isld3_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    ImageComponent agent_select
      image = stimuli/pirate_ship.png
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
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    TextComponent text
      letterHeight = 0.025
      pos [set every repeat] = center_txt_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
      text [set every frame] = $travel_msg
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    TextComponent travel_action_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $travel_duration
      text [set every repeat] = $actions_remaining_msg
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  Routine exploit_fbk
    CodeComponent code_exploit_2
      Code Type = JS
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      Begin JS Routine:
        // set remaining actions to display to participant
        actions_remaining=total_actions_allowed-actions_blk;

        if ((actions_remaining<0)) {
            actions_remaining=0;
            }

        actions_remaining_msg='Actions left in block: ' + actions_remaining.toString();
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // if s is pressed, end the routine
        if ((exploit_resp.keys === "s")) {
            continueRoutine=false;
            }
      End JS Routine:
        // update the value of the alternative patches after each action
            all_islds=[1,2,3];
            cmp_isld= curr_isld + ""
            alt_islds = all_islds.filter(x => cmp_isld.indexOf(x) === -1);
            isld_rvals[(alt_islds[0] - 1)] = (isld_rvals[(alt_islds[0] - 1)] + isld_replen_rates[(alt_islds[0] - 1)]*(100-isld_rvals[(alt_islds[0] - 1)]));
            isld_rvals[(alt_islds[1] - 1)] = (isld_rvals[(alt_islds[1] - 1)] + isld_replen_rates[(alt_islds[1] - 1)]*(100-isld_rvals[(alt_islds[1] - 1)]));

            // if the values exceed the maximum value, set them to the maximum
            if ((isld_rvals[(alt_islds[0] - 1)] > isld_svals[(alt_islds[0] - 1)])) {
                isld_rvals[(alt_islds[0] - 1)] = isld_svals[(alt_islds[0] - 1)];
            }
            if ((isld_rvals[(alt_islds[1] - 1)] > isld_svals[(alt_islds[1] - 1)])) {
                isld_rvals[(alt_islds[1] - 1)] = isld_svals[(alt_islds[1] - 1)];
            }

        // update current island once at end to account for replenish during leaving decision (optional)
        if ((exploit_resp.keys === "s")) {
            isld_rvals[(curr_isld-1)] = (isld_rvals[(curr_isld-1)] + isld_replen_rates[(curr_isld-1)]*(100-isld_rvals[(curr_isld-1)]));

            if ((isld_rvals[(curr_isld - 1)] > isld_svals[(curr_isld - 1)])) {
                isld_rvals[(curr_isld - 1)] = isld_svals[(curr_isld - 1)];
            }

        // if leaving patch, end timer
            endTime = Date.now();
            patchTime = (endTime-startTime) / 1000; // patchTime in seconds if using Date.now()
        }


        // save data
        psychoJS.experiment.addData('blk_number', curr_blk_number);
        psychoJS.experiment.addData('blk_type', curr_blk); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', Math.floor(mean_reward_blk));
        psychoJS.experiment.addData('current patch position', curr_isld); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', Math.floor(isld_rvals[0]));
        psychoJS.experiment.addData('patch value top', Math.floor(isld_rvals[1]));
        psychoJS.experiment.addData('patch value right', Math.floor(isld_rvals[2]));
        psychoJS.experiment.addData('patch replenish left', isld_replen_rates[0]);
        psychoJS.experiment.addData('patch replenish top', isld_replen_rates[1]);
        psychoJS.experiment.addData('patch replenish right', isld_replen_rates[2]);
        psychoJS.experiment.addData('current patch replenish rate', isld_replen_rates[curr_isld-1]); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', Math.floor(isld_rvals[slow_idx]));
        psychoJS.experiment.addData('patch value medium', Math.floor(isld_rvals[medium_idx]));
        psychoJS.experiment.addData('patch value fast', Math.floor(isld_rvals[fast_idx]));
        psychoJS.experiment.addData('patch replenish slow', isld_replen_rates[slow_idx]);
        psychoJS.experiment.addData('patch replenish medium', isld_replen_rates[medium_idx]);
        psychoJS.experiment.addData('patch replenish fast', isld_replen_rates[fast_idx]);
        psychoJS.experiment.addData('decision type', 0); // Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 4); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback

        // selection variables
        psychoJS.experiment.addData('patch_selection_key', 0);
        psychoJS.experiment.addData('patch_selection_RT', 0);

        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', Math.floor(isld_rvals[(curr_isld - 1)]));
        psychoJS.experiment.addData('rew_fbk_displayed', rew_displayed);
        psychoJS.experiment.addData('blk_points', Math.floor(points_blk));
        psychoJS.experiment.addData('blk_actions', actions_blk);
        psychoJS.experiment.addData('exploit_phase_key', 0);
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('num_exploit_actions', 0);

        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', Math.floor(mean_reward_entire_experiment));
        psychoJS.experiment.addData('total_points', Math.floor(total_points));
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', actions_remaining);
        psychoJS.experiment.addData('time in patch (seconds)', patchTime);
        psychoJS.experiment.nextEntry()

        // if the total actions allowed in the block have been taken, end the block
        if ((actions_remaining===0)) {
            curr_pos = [0, 0];
            ship_pos = [0, 0];
            curr_isld = 10;
            continueRoutine=false;
            exploit_loop.finished=true;
            trials.finished=true;
            }
    PolygonComponent ocean_exploit_2
      fillColor = $ocean_col
      lineColor = $ocean_col
      shape = rectangle
      size [set every repeat] = $ocean_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    PolygonComponent isld1_exploit_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld1_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    PolygonComponent isld2_exploit_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld2_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    PolygonComponent isld3_exploit_2
      fillColor = $isld_col
      lineColor = $isld_col
      nVertices = 25
      pos [set every repeat] = $isld3_pos
      shape = regular polygon...
      size [set every repeat] = $isld_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    ImageComponent agent_exploit_2
      image = $agent
      pos [set every repeat] = $ship_pos
      size [set every repeat] = $agent_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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    TextComponent points_txt_2
      color [set every repeat] = white
      letterHeight = 0.025
      opacity [set every repeat] = $fbk_opacity
      pos [set every repeat] = $rew_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text [set every repeat] = $rew_displayed_msg
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    TextComponent exploit_fbk_dig_sail_txt
      letterHeight = 0.025
      pos [set every repeat] = [0,0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text = Press space to dig for treasure and s to set sail
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    TextComponent exploit_fbk_action_count
      letterHeight [set every repeat] = $action_msg_size
      pos [set every repeat] = $action_msg_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
      text [set every repeat] = $actions_remaining_msg
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    ImageComponent treasure
      image [set every repeat] = $bounty
      opacity [set every repeat] = $fbk_opacity
      pos [set every repeat] = $treasure_pos
      size [set every repeat] = $treasure_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_duration
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  Routine block_instructions
  Routine blk_instruc
    CodeComponent blk_instruc_code
      Code Type = JS
      Begin JS Experiment:
        // define shuffle function
        window.shuffle = function(a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }

        // define block information
        blk_order = [1, 1, 2, 2];
        shuffle(blk_order);
        blk_idx = -1; // updated when routine begins
        curr_blk_number = 0; // used for end of block message. Will update to one when starting block_instruc
        total_blk_number = 4;
      Begin JS Routine:
        blk_idx=blk_idx+1;
        curr_blk = blk_order[blk_idx];
        curr_blk_number=curr_blk_number+1;
        fbk_opacity=1; // restore fbk opacity for block in case it was changed

        if ((curr_blk===1)) {
            blk_instruc_txt='The seas are stormy!\n\nIn this block, storms will mean you can only navigate to a specific island when setting sail from your current island.\n\nLike any swashbuckling pirate with a thirst for riches, try to earn as many gold medallions as you can during the block, as this will increase your bonus payment!\n\n\n\nPress enter to begin'
        }

        if ((curr_blk===2)) {
            blk_instruc_txt='The seas are calm.\n\nIn this block, calm seas will allow you to navigate to any island when setting sail from your current island.\n\nLike any swashbuckling pirate with a thirst for riches, try to earn as many gold medallions as you can during the block as this will increase your bonus payment!\n\n\n\nPress enter to begin'
        }

        // Shuffle the replenish rates assigned to each patch at the start of the block
        shuffle(isld_replen_rates)

        // figure out assignment index for slow patch
        if ((isld_replen_rates[0]===initial_replen_rates[0])) {
            slow_idx=0;
        }
        if ((isld_replen_rates[0]===initial_replen_rates[1])) {
            slow_idx=1;
        }
        if ((isld_replen_rates[0]===initial_replen_rates[2])) {
            slow_idx=2;
        }

        // figure out assignment index for medium patch
        if ((isld_replen_rates[1]===initial_replen_rates[0])) {
            medium_idx=0;
        }
        if ((isld_replen_rates[1]===initial_replen_rates[1])) {
            medium_idx=1;
        }
        if ((isld_replen_rates[1]===initial_replen_rates[2])) {
            medium_idx=2;
        }

        // figure out assignment index for fast patch
        if ((isld_replen_rates[2]===initial_replen_rates[0])) {
            fast_idx=0;
        }
        if ((isld_replen_rates[2]===initial_replen_rates[1])) {
            fast_idx=1;
        }
        if ((isld_replen_rates[2]===initial_replen_rates[2])) {
            fast_idx=2;
        }

        console.log(isld_replen_rates)

        // reset object start values and a value vector that can be updated during the block
        isld_svals = [100, 100, 100];
        //isld_rvals = [100, 100, 100];

        // start patch values at random points around the mean
        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        center_svals=(69+79)/2;
        bound=5;
        isld_rvals=[];
        var i;
        for (i = 0; i < 3; i++) {
          isld_rvals[i]=getRandomInt(center_svals-bound,center_svals+bound);
        }

        // reset block points
        points_blk=0;
        mean_reward_blk=0;

        psychoJS.experiment.addData('starting values', isld_svals);
        psychoJS.experiment.addData('reward vector to manipulate', isld_rvals); // should be initialised at starting values
        psychoJS.experiment.addData('decay_rate', k);
        psychoJS.experiment.addData('replenish rates', isld_replen_rates);
        psychoJS.experiment.addData('travel_duration', travel_duration);
        psychoJS.experiment.addData('feedback_duration', fbk_duration);
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // reset total actions for the new block
        actions_blk=0;
    TextComponent blk_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $blk_instruc_txt
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    KeyboardComponent blk_instruc_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_blk_msg
    CodeComponent post_blk_code
      Code Type = JS
      Begin JS Routine:
        blk_msg_points=Math.floor(points_blk);
        blk_msg_allpoints=Math.floor(total_points);

        if ((curr_blk_number<total_blk_number)) {
        post_blk_msg='Arrr! Well done salty sea dog.\n\n\In this block ye earned ' + blk_msg_points.toString() + ' gold medallions!\n\nYou have now completed ' + curr_blk_number.toString() + ' out of ' + total_blk_number.toString() + ' and have collected ' + blk_msg_allpoints.toString() + ' gold medallions overall. See if you can earn even more medallions in the next block to boost your bonus payment.\n\n\n\nPress space to continue'
        }

        if ((curr_blk_number===total_blk_number)) {
        post_blk_msg='Arrr! Well done salty sea dog.\n\n\In this block ye earned ' + blk_msg_points.toString() + ' gold medallions!\n\nYou have now completed ' + curr_blk_number.toString() + ' out of ' + total_blk_number.toString() + ' and have collected ' + blk_msg_allpoints.toString() + ' gold medallions overall.\n\n\n\nPress space to continue'
        }
      Each JS Frame:
        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
    TextComponent text_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $post_blk_msg
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    KeyboardComponent post_blk_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demographics
    CodeComponent demographics_code
      Code Type = JS
      Begin JS Routine:
        // define function to load demographic questions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "resources/instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        // initialise input text
        addtext='';
        psychoJS.eventManager.clearKeys()

        if ((demographic_msg_counter===0)) {
        demographic_question=instructions.demographics.page1
        }

        if ((demographic_msg_counter===1)) {
        demographic_question=instructions.demographics.page2
        }
      Each JS Frame:
        if ((do_demographics===0)) {
            continueRoutine=false;
            trials.finished=true;
            }

        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }

        // display text on screen
        numericKeys=['0','1','2','3','4','5','6','7','8','9'];
        let theseKeys = psychoJS.eventManager.getKeys({keyList:['1','2','3','4','5','6','7','8','9','0', 'backspace','return']});

        if (theseKeys[0] !== "return") {
            if (theseKeys[0] === "backspace") {
                addtext = addtext.substring((addtext.length-1), -1);
            } else if (numericKeys.includes(theseKeys[0])) {
                if (addtext.length < 2) {
                addtext = String(addtext)+String(theseKeys[0]);
                }
            }
        } else if (theseKeys[0] === "return") {
                if ((demographic_msg_counter===0)) {
                    age=addtext
                        if (addtext.length === 2) {
                            continueRoutine = false;
                         }
                    }

                if ((demographic_msg_counter===1)) {
                    gender=addtext
                        if (addtext.length === 1) {
                            continueRoutine = false;
                         }
                    }
              }
      End JS Routine:
        if ((demographic_msg_counter===0)) {
            psychoJS.experiment.addData('age', (Number(age)));
            }

        if ((demographic_msg_counter===1)) {
            psychoJS.experiment.addData('gender', (Number(gender)));
            }


        demographic_msg_counter=demographic_msg_counter+1;


        // save data
                if (Number(age)>40){
                terminate_expt=1
                final_msg="Sorry captain, it looks like you are over the age limit for this experiment and cannot continue. Please press space to return to Prolific. Even though you will see the completion code, you will need to return the submission to avoid it being rejected. Thank you for following through.";
                }
    TextComponent demographics_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographic_question
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    TextComponent demographics_input
      letterHeight = 0.025
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $addtext
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    KeyboardComponent demo_resp
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine welcome
    CodeComponent task_instruc_code
      Code Type = JS
      Begin JS Experiment:
        // define screen counters
        intruc_msg_counter=0;
        demographic_msg_counter=0;
        screening_msg_counter=0;
        task_instruc_msg_counter=0;

        // number of slides to present
        num_welcome=6;
        num_screening_questions=2;
        num_demographic_questions=2;
        num_instruction_trials=10;

        // run phase?
        do_instruc=1;
        do_screening=1;
        do_demographics=1;
        do_task_instruc=1;


        // initialise variables
        screeningQ1=[];
        screeningQ2=[];
        label_txt='';
        age=[];
        gender=[];

        // load task instruction images
        instruc_imgs=["stimuli/free_choice1.png","stimuli/free_choice2.png","stimuli/free_choice3.png","stimuli/free_choice4.png","stimuli/free_choice5.png","stimuli/free_choice6.png","stimuli/free_choice6.png","stimuli/free_choice6.png","stimuli/forced_choice1.png"];

        // task instructions opacity and positioning
            task_instruc_img_opacity=1;
            task_instruc_txt_pos=[0, 0.3];
            task_instruc_space_txt_pos=[0, -0.4]

        // initialise screening variables
        terminate_expt=0;
        screeningQ1_passed=0;
        screeningQ2_passed=0;
        age=0;

        // final message if experiment is finished under normal circumstances
        final_msg=['Shiver me timbers! You completed the experiment. Press space to claim your treasure. Feel free to send us a message and let us know how found the task.'];

        // initalise variables for saving
        // participant variables
        psychoJS.experiment.addData('consent_given', 0);
        psychoJS.experiment.addData('screeningQ1', 0);
        psychoJS.experiment.addData('screeningQ2', 0);
        psychoJS.experiment.addData('age', 0);
        psychoJS.experiment.addData('gender', 0);

        // setting variables
        psychoJS.experiment.addData('starting values', 0); // should be value defined under begin experiment in select component
        psychoJS.experiment.addData('reward vec', 0); // should be value defined under begin experiment in select component
        psychoJS.experiment.addData('decay_rate', 0);
        psychoJS.experiment.addData('replenish rates', 0);
        psychoJS.experiment.addData('travel_duration', 0);
        psychoJS.experiment.addData('feedback_duration', 0);

        // key variables to save
        psychoJS.experiment.addData('blk_number', 0);
        psychoJS.experiment.addData('blk_type', 0); // 1 for forced choice, 2 for free choice
        psychoJS.experiment.addData('mean reward block', 0);
        psychoJS.experiment.addData('current patch position', 0); // 1=left, 2=top, 3=right
        psychoJS.experiment.addData('patch value left', 0);
        psychoJS.experiment.addData('patch value top', 0);
        psychoJS.experiment.addData('patch value right', 0);
        psychoJS.experiment.addData('patch replenish left', 0);
        psychoJS.experiment.addData('patch replenish top', 0);
        psychoJS.experiment.addData('patch replenish right', 0);
        psychoJS.experiment.addData('current patch replenish rate', 0); // 1=slow, 2=medium, 3=fast
        psychoJS.experiment.addData('patch value slow', 0);
        psychoJS.experiment.addData('patch value medium', 0);
        psychoJS.experiment.addData('patch value fast', 0);
        psychoJS.experiment.addData('patch replenish slow', 0);
        psychoJS.experiment.addData('patch replenish medium', 0);
        psychoJS.experiment.addData('patch replenish fast', 0);
        psychoJS.experiment.addData('decision type', 0); // initialise. Use 1 for select, 2 for stay, 3 for leave
        psychoJS.experiment.addData('trial phase', 0); // 1 for select, 2 for travel, 3 for exploit/stay decision, 4 for exploit feedback


        // selection variables
        psychoJS.experiment.addData('patch_selection_key', 0);
        psychoJS.experiment.addData('patch_selection_RT', 0);


        // exploit loop variables
        psychoJS.experiment.addData('actual_rew_gain', 0);
        psychoJS.experiment.addData('rew_fbk_displayed', 0);
        psychoJS.experiment.addData('blk_points', 0);
        psychoJS.experiment.addData('blk_actions', 0);
        psychoJS.experiment.addData('exploit_phase_key', 0);
        psychoJS.experiment.addData('exploit_phase_RT', 0);
        psychoJS.experiment.addData('num_exploit_actions', 0); // just save on leaving to make analysis easier

        // broader variables
        psychoJS.experiment.addData('mean reward entire experiment', 0); // initialize
        psychoJS.experiment.addData('total_points', total_points);
        psychoJS.experiment.addData('total_actions', total_actions);
        psychoJS.experiment.addData('actions_remaining', total_actions);
        psychoJS.experiment.addData('time in patch (seconds)', 0);
      Begin JS Routine:
        // define function to load instructions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "resources/instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((intruc_msg_counter===0)) {
        task_instruc_msg=instructions.consent.page1
        }

        if ((intruc_msg_counter===1)) {
        task_instruc_msg=instructions.consent.page2
        }

        if ((intruc_msg_counter===2)) {
        task_instruc_msg=instructions.consent.page3
        }

        if ((intruc_msg_counter===3)) {
        task_instruc_msg=instructions.consent.page4
        }

        if ((intruc_msg_counter===4)) {
        task_instruc_msg=instructions.consent.page5
        }

        if ((intruc_msg_counter===5)) {
        task_instruc_msg=instructions.consent.page6
        }
      Each JS Frame:
        if ((do_instruc===0)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        // update counter
        intruc_msg_counter=intruc_msg_counter+1;
    TextComponent task_instruc_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instruc_msg
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    KeyboardComponent task_instruc_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screening_qs
    CodeComponent screening_code
      Code Type = JS
      Begin JS Experiment:
        // define button positions for screening qs
        button_col = 'black'
        button_size=[0.1, 0.1]
        button1_pos=[-0.45, -0.15]
        button2_pos=[-0.225, -0.15]
        button3_pos=[0, -0.15]
        button4_pos=[0.225, -0.15]
        button5_pos=[0.45, -0.15]

        btxt_col = 'black'
        btxt_size=0.03
        btxt1_pos=[-0.45, -0.215]
        btxt2_pos=[-0.225, -0.215]
        btxt3_pos=[0, -0.215]
        btxt4_pos=[0.225, -0.215]
        btxt5_pos=[0.45, -0.215]
      Begin JS Routine:
        // define function to demographic questions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "resources/instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((screening_msg_counter===0)) {
        psychoJS.experiment.addData('consent_given', 1);
        screening_question=instructions.screening.page1
        screening_txt=["blue", "green", "black", "purple", "red"];

        //slider.ticks=[1,2,3,4,5];
        //slider.labels=["blue", "green", "black", "purple", "red"];
        }

        if ((screening_msg_counter===1)) {
        screening_question=instructions.screening.page2
        screening_txt=["one", "two", "three", "four", "five"];

        //slider.ticks=[1,2,3,4,5];
        //slider.labels=["one", "two", "three", "four", "five"];
        }

        //slider._needVertexUpdate = true;
        //slider._buildSlider();
        //slider.style=[visual.Slider.Style.RADIO]
      Each JS Frame:
        if ((do_screening===0)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        if ((screening_msg_counter===0)) {
            screeningQ1_resp=mouse.clicked_name[0]; //slider.getRating();
            if ((screeningQ1_resp === 'button4')) {
                screeningQ1_passed=1;
                }
            psychoJS.experiment.addData('screeningQ1', screeningQ1_passed);
            }

        if ((screening_msg_counter===1)) {
            screeningQ2_resp=mouse.clicked_name[0]//slider.getRating();
            if ((screeningQ2_resp === 'button3')) {
                screeningQ2_passed=1;
                }
            psychoJS.experiment.addData('screeningQ2', screeningQ2_passed);
            }

        screening_msg_counter=screening_msg_counter+1;

        if ((screening_msg_counter===2)) {
            if ((screeningQ1_passed===0 && screeningQ2_passed===0)) {
                terminate_expt=1;
                final_msg="Sorry captain, it looks like you failed both attention checks and cannot continue with the study. Please press space to return to Prolific. Even though you will see the completion code, you will need to return the submission to avoid it being rejected. Thank you for following through.";
                }
        }
    TextComponent text_3
      letterHeight = 0.025
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_question
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    SliderComponent slider
      color = black
      disabled = True
      font = Helvetica
      forceEndRoutine = True
      granularity = 1
      pos = (0, -0.15)
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      styles = ['radio', 'whiteOnBlack']
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    PolygonComponent button1
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button1_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button2
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button2_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button3
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button3_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button4
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button4_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    PolygonComponent button5
      fillColor [set every repeat] = $button_col
      lineColor [set every repeat] = $button_col
      nVertices = 30
      pos [set every repeat] = $button5_pos
      shape = regular polygon...
      size [set every repeat] = $button_size
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = button1, button2, button3, button4, button5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    TextComponent btxt1
      color [set every repeat] = $btxt_col
      font = Helvetica
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt1_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[0]
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    TextComponent btxt2
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = $btxt2_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[1]
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    TextComponent btxt3
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt3_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[2]
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    TextComponent btxt4
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt4_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[3]
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    TextComponent btxt5
      color [set every repeat] = $btxt_col
      letterHeight [set every repeat] = btxt_size
      pos [set every repeat] = btxt5_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $screening_txt[4]
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  Routine task_instruc
    CodeComponent instruc_code
      Code Type = JS
      Begin JS Routine:
        // define function to load task instructions
        var instructions = (function () {
            var instructions  = null;
            $.ajax({
                'async': false,
                'global': false,
                'url': "resources/instructions.json",
                'dataType': "json",
                'success': function (data) {
                    instructions  = data;
                }
            });
            return instructions;
        })();

        if ((task_instruc_msg_counter==0)) {
            task_instruction_txt=instructions.task.page1
        }

        if ((task_instruc_msg_counter==1)) {
            task_instruction_txt=instructions.task.page2
        }

        if ((task_instruc_msg_counter==2)) {
            task_instruction_txt=instructions.task.page3
        }

        if ((task_instruc_msg_counter==3)) {
            task_instruction_txt=instructions.task.page4
        }

        if ((task_instruc_msg_counter==4)) {
            task_instruction_txt=instructions.task.page5
        }

        if ((task_instruc_msg_counter==5)) {
            task_instruction_txt=instructions.task.page6
        }

        if ((task_instruc_msg_counter==6)) {
            task_instruction_txt=instructions.task.page7
        }

        if ((task_instruc_msg_counter==7)) {
            task_instruction_txt=instructions.task.page8
        }

        if ((task_instruc_msg_counter==8)) {
            task_instruction_txt=instructions.task.page9
        }

        if ((task_instruc_msg_counter==9)) {
            task_instruc_img_opacity=0;
            task_instruc_txt_pos=[0,0];
            task_instruc_space_txt_pos=[0, -0.1]
            task_instruction_txt=instructions.task.page10
        }
      Each JS Frame:
        if ((do_task_instruc===0)) {
            continueRoutine=false;
            trials.finished=true;
            }

        if ((terminate_expt===1)) {
            continueRoutine=false;
            trials.finished=true;
            }
      End JS Routine:
        task_instruc_msg_counter=task_instruc_msg_counter+1;
    TextComponent instruc_txt
      letterHeight = 0.025
      pos [set every repeat] = $task_instruc_txt_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instruction_txt
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    ImageComponent instruc_image
      image [set every repeat] = $instruc_imgs[task_instruc_msg_counter]
      opacity [set every repeat] = $task_instruc_img_opacity
      pos = (0, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.025
      pos [set every repeat] = $task_instruc_space_txt_pos
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine close_expt
    TextComponent closing_msg_txt
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $final_msg
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    KeyboardComponent closing_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  LoopInitiator trials_welcome loopType="TrialHandler"
    loopType = random
    nReps = num_welcome
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    Routine welcome
  LoopTerminator trials_welcome
  LoopInitiator trials_screening loopType="TrialHandler"
    loopType = random
    nReps = num_screening_questions
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    Routine screening_qs
  LoopTerminator trials_screening
  LoopInitiator trials_demographics loopType="TrialHandler"
    loopType = random
    nReps = num_demographic_questions
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    Routine demographics
  LoopTerminator trials_demographics
  LoopInitiator trials_instructions loopType="TrialHandler"
    loopType = random
    nReps = num_instruction_trials
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    Routine task_instruc
  LoopTerminator trials_instructions
  LoopInitiator blk_loop loopType="TrialHandler"
    loopType = random
    nReps = total_blk_number
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    Routine blk_instruc
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = total_actions_allowed
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      Routine select
      Routine travel
      LoopInitiator exploit_loop loopType="TrialHandler"
        loopType = random
        nReps = total_actions_allowed
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        Routine exploit
        Routine exploit_fbk
      LoopTerminator exploit_loop
    LoopTerminator trials
    Routine post_blk_msg
  LoopTerminator blk_loop
  Routine close_expt
